PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = Stroop task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Circle
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $font_color.lower()
      letterHeight = 0.05
      pos = (10, 10)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'b' 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop task.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'word': 'RED', 'font_color': 'red', 'con_label': 'congruent', 'corr_resp': 'r'},
      {'word': 'BLUE ', 'font_color': 'blue', 'con_label': 'congruent', 'corr_resp': 'b'},
      {'word': 'RED', 'font_color': 'blue', 'con_label': 'incong', 'corr_resp': 'b'},
      {'word': 'BLUE ', 'font_color': 'red', 'con_label': 'incong', 'corr_resp': 'r'}]
    Routine trial
  LoopTerminator trials
